s:Ge/World/Material  = "G4_W"
d:Ge/World/HLX       = 2.0 m
d:Ge/World/HLY       = 2.0 m
d:Ge/World/HLZ       = 2.0 m
b:Ge/World/Invisible = "True"

s:Ge/DemoSphere/Type                 = "TsSphere"
s:Ge/DemoSphere/Parent               = "World"
s:Ge/DemoSphere/Material             = "Vacuum"
d:Ge/DemoSphere/RMax                 = 120 mm
d:Ge/DemoSphere/DPhi                 = 180 deg

s:Ge/InnerSphere/Type                 = "TsSphere"
s:Ge/InnerSphere/Parent               = "DemoSphere"
s:Ge/InnerSphere/Material             = "Vacuum"
dc:Ge/InnerSphere/RMax                 = 100 mm
d:Ge/InnerSphere/DPhi                 = 180 deg
sc:Ge/InnerSphere/DrawingStyle = "Solid"

s:Ge/DemoTwistedTubs/Type            = "G4TwistedTubs"
#s:Ge/DemoTwistedTubs/Parent          = "World"
s:Ge/DemoTwistedTubs/Material        = "Vacuum"
d:Ge/DemoTwistedTubs/Twist           = 60 deg
d:Ge/DemoTwistedTubs/EndInnerRad     = 10 mm
d:Ge/DemoTwistedTubs/EndOuterRad     = 15 mm
d:Ge/DemoTwistedTubs/HLZ             = 20 mm
d:Ge/DemoTwistedTubs/Phi             = 90 deg
s:Ge/DemoTwistedTubs/Color           = "brown"
s:Ge/DemoTwistedTubs/DrawingStyle    = "FullWireFrame"

s:So/Example/Type                     = "Distributed"
s:So/Example/Component                = "DemoSphere"
s:So/Example/BeamParticle             = "gamma"
d:So/Example/BeamEnergy               = 10. keV
u:So/Example/BeamEnergySpread         = 0.
ic:So/Example/NumberOfHistoriesInRun   = 30
ic:So/Example/NumberOfSourcePoints     = 5
bc:So/Example/RedistributePointsOnNewRun = "False"

sv:Ph/Default/Modules = 1 "g4em-standard_opt0"

i:Ts/ShowHistoryCountAtInterval = 100
b:Ts/PauseBeforeQuit = "True"

s:Gr/ViewA/Type = "OpenGL"
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"
Ts/UseQt = "T"
