b:Ge/World/Invisible = "True"

s:Ge/EyePlaque/Type     = "TsEyePlaque"
s:Ge/EyePlaque/Material = "G4_WATER"
s:Ge/EyePlaque/Parent   = "World"
sc:Ge/EyePlaque/DrawingStyle = "Solid"
sc:Ge/EyePlaque/Back/DrawingStyle = "Solid"
sc:Ge/EyePlaque/Lip/DrawingStyle = "Solid"
dc:Ge/EyePlaque/Eye/Radius	= 12.30 mm
s:Ge/EyePlaque/Back/Material = "Modulay"
s:Ge/EyePlaque/Lip/Material = "Silastic"
dc:Ge/EyePlaque/Sphere/ROuter		 = 15.05 mm
dc:Ge/EyePlaque/Sphere/RInner		 = 14.55 mm
dc:Ge/EyePlaque/Cylinder/Length		 = 28.00 mm
dc:Ge/EyePlaque/SphereCutCylinder/ROuter = 12.00 mm
dc:Ge/EyePlaque/SphereCutCylinder/RInner = Ge/COMSEyePlaque22mmSphereCutCylinderRInner mm
dc:Ge/EyePlaque/Cylinder/ROuter		 = Ge/COMSEyePlaque22mmCylinderROuter mm
dc:Ge/EyePlaque/Cylinder/RInner		 = Ge/COMSEyePlaque22mmCylinderRInner mm

# Values for the specific COMSEyePlaques to be used above
dc:Ge/COMSEyePlaque10mmSphereCutCylinderRInner = 11.238 mm
dc:Ge/COMSEyePlaque10mmCylinderROuter	=  5.50 mm
dc:Ge/COMSEyePlaque10mmCylinderRInner	=  5.00 mm

dc:Ge/COMSEyePlaque12mmSphereCutCylinderRInner = 10.737 mm
dc:Ge/COMSEyePlaque12mmCylinderROuter	=  6.50 mm
dc:Ge/COMSEyePlaque12mmCylinderRInner	=  6.00 mm

dc:Ge/COMSEyePlaque14mmSphereCutCylinderRInner = 10.114 mm
dc:Ge/COMSEyePlaque14mmCylinderROuter	=  7.50 mm
dc:Ge/COMSEyePlaque14mmCylinderRInner	=  7.00 mm

dc:Ge/COMSEyePlaque16mmSphereCutCylinderRInner = 9.343 mm
dc:Ge/COMSEyePlaque16mmCylinderROuter	=  8.50 mm
dc:Ge/COMSEyePlaque16mmCylinderRInner	=  8.00 mm

dc:Ge/COMSEyePlaque18mmSphereCutCylinderRInner = 8.384 mm
dc:Ge/COMSEyePlaque18mmCylinderROuter	=  9.50 mm
dc:Ge/COMSEyePlaque18mmCylinderRInner	=  9.00 mm

dc:Ge/COMSEyePlaque20mmSphereCutCylinderRInner = 7.162 mm
dc:Ge/COMSEyePlaque20mmCylinderROuter	= 10.50 mm
dc:Ge/COMSEyePlaque20mmCylinderRInner	= 10.00 mm

dc:Ge/COMSEyePlaque22mmSphereCutCylinderRInner = 5.504 mm
dc:Ge/COMSEyePlaque22mmCylinderROuter	= 11.50 mm
dc:Ge/COMSEyePlaque22mmCylinderRInner	= 11.00 mm

sv:Ma/Modulay/Components = 4 "Gold" "Silver" "Copper" "Palladium"
uv:Ma/Modulay/Fractions = 4 0.77 0.14 0.08 0.01
d:Ma/Modulay/Density = 15.8 g/cm3
s:Ma/Modulay/DefaultColor = "TransparentRed"

sv:Ma/Silastic/Components = 5 "Hydrogen" "Carbon" "Oxygen" "Silicon" "Platinum"
uv:Ma/Silastic/Fractions = 5 0.063 0.249 0.289 0.39895 0.00005
d:Ma/Silastic/Density = 1.12 g/cm3
s:Ma/Silastic/DefaultColor = "Green"

iv:Gr/Color/TransparentRed = 4 255 0 0 50
iv:Gr/Color/TransparentYellow = 4 255 255 0 50
iv:Gr/Color/TransparentBlue = 4 0 0 128 128

Ph/Default/Modules = 1 "g4em-standard_opt0"

So/Demo/NumberOfHistoriesInRun = 10

s:Gr/ViewA/Type             = "OpenGL"
Ts/UseQt = "True"



