# Topas parameter settings for conversion of Hounsfield Units to materials using the Schneider paper

s:Ge/Patient2/ImagingToMaterialConverter = "Schneider"

# Correction Factor for the relative stopping power of Geant4 and the XiO planning system:
dv:Ge/Patient2/DensityCorrection = 3996 9.35212 5.55269 4.14652 3.41395 2.9645 2.66061 2.44144 2.27588 2.1464 2.04239 1.95698 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1.00275 g/cm3

# Formula: Density = (Offset + (Factor*(FactorOffset + HU[-1000,2995] ))) * DensityCorrection
iv:Ge/Patient2/SchneiderHounsfieldUnitSections = 8 -1000 -98 15 23 101 2001 2995 2996
uv:Ge/Patient2/SchneiderDensityOffset = 7 0.00121 1.018 1.03 1.003 1.017 2.201 4.54
uv:Ge/Patient2/SchneiderDensityFactor = 7 0.001029700665188 0.000893 0.0 0.001169 0.000592 0.0005 0.0
uv:Ge/Patient2/SchneiderDensityFactorOffset = 7 1000. 0. 1000. 0. 0. -2000. 0.

# Define Materials used for HU
sv:Ge/Patient2/SchneiderElements = 13 "Hydrogen" "Carbon" "Nitrogen" "Oxygen" "Magnesium" "Phosphorus" "Sulfur" "Chlorine" "Argon" "Calcium" "Sodium" "Potassium" "Titanium"
iv:Ge/Patient2/SchneiderHUToMaterialSections = 26 -1000 -950 -120 -83 -53 -23 7 18 80 120 200 300 400 500 600 700 800 900 1000 1100 1200 1300 1400 1500 2995 2996
uv:Ge/Patient2/SchneiderMaterialsWeight1  = 13 0.0      0.0    0.755    0.232  0.0       0.0       0.0    0.0      0.013  0.0	 0.0    0.0	  0.0
uv:Ge/Patient2/SchneiderMaterialsWeight2  = 13 0.103    0.105  0.031    0.749  0.0       0.002     0.003  0.003    0.0    0.0	 0.002  0.002	  0.0
uv:Ge/Patient2/SchneiderMaterialsWeight3  = 13 0.116    0.681  0.002    0.198  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient2/SchneiderMaterialsWeight4  = 13 0.113    0.567  0.009    0.308  0.0       0.0       0.001  0.001    0.0    0.0	 0.001  0.0	  0.0
uv:Ge/Patient2/SchneiderMaterialsWeight5  = 13 0.110    0.458  0.015    0.411  0.0       0.001     0.002  0.002    0.0    0.0     0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight6  = 13 0.108    0.356  0.022    0.509  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight7  = 13 0.106    0.284  0.026    0.578  0.0       0.001     0.002  0.002    0.0    0.0     0.0    0.001     0.0
uv:Ge/Patient2/SchneiderMaterialsWeight8  = 13 0.103    0.134  0.030    0.723  0.0       0.002     0.002  0.002    0.0    0.0     0.002  0.002     0.0
uv:Ge/Patient2/SchneiderMaterialsWeight9  = 13 0.094    0.207  0.062    0.622  0.0       0.0       0.006  0.003    0.0    0.0     0.006  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight10 = 13 0.095    0.455  0.025    0.355  0.0       0.021     0.001	 0.001	  0.0    0.045   0.001  0.001     0.0
uv:Ge/Patient2/SchneiderMaterialsWeight11 = 13 0.089    0.423  0.027    0.363  0.0       0.030	  0.001	 0.001	  0.0    0.064   0.001  0.001     0.0
uv:Ge/Patient2/SchneiderMaterialsWeight12 = 13 0.082    0.391  0.029    0.372  0.0       0.039	  0.001	 0.001	  0.0    0.083   0.001  0.001     0.0
uv:Ge/Patient2/SchneiderMaterialsWeight13 = 13 0.076    0.361  0.030    0.380  0.001     0.047	  0.002	 0.001	  0.0    0.101   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight14 = 13 0.071    0.335  0.032    0.387  0.001     0.054	  0.002	 0.0	  0.0    0.117   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight15 = 13 0.066    0.310  0.033    0.394  0.001     0.061	  0.002	 0.0	  0.0    0.132   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight16 = 13 0.061    0.287  0.035    0.400  0.001     0.067	  0.002	 0.0	  0.0    0.146   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight17 = 13 0.056    0.265  0.036    0.405  0.002     0.073	  0.003	 0.0	  0.0    0.159   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight18 = 13 0.052    0.246  0.037    0.411  0.002     0.078	  0.003	 0.0	  0.0    0.170   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight19 = 13 0.049    0.227  0.038    0.416  0.002     0.083	  0.003	 0.0	  0.0    0.181   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight20 = 13 0.045    0.210  0.039    0.420  0.002     0.088	  0.003	 0.0	  0.0    0.192   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight21 = 13 0.042    0.194  0.040    0.425  0.002     0.092	  0.003	 0.0	  0.0    0.201   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight22 = 13 0.039    0.179  0.041    0.429  0.002     0.096	  0.003	 0.0	  0.0    0.210   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight23 = 13 0.036    0.165  0.042    0.432  0.002     0.100	  0.003	 0.0	  0.0    0.219   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight24 = 13 0.034    0.155  0.042    0.435  0.002     0.103	  0.003	 0.0	  0.0    0.225   0.001  0.0       0.0
uv:Ge/Patient2/SchneiderMaterialsWeight25 = 13 0.0      0.0    0.0      0.0    0.0       0.0	  0.0	 0.0	  0.0    0.0     0.0    0.0       1.0

iv:Gr/Color/Patient2Tissue1 = 3  63  63  63
iv:Gr/Color/Patient2Tissue2 = 3 100   0   0
iv:Gr/Color/Patient2Tissue3 = 3 100  30   0
iv:Gr/Color/Patient2Tissue4 = 3 100  60   0
iv:Gr/Color/Patient2Tissue5 = 3 100  90   0
iv:Gr/Color/Patient2Tissue6 = 3 100 120   0
iv:Gr/Color/Patient2Tissue7 = 3 100 150   0
iv:Gr/Color/Patient2Tissue8 = 3 100 180   0
iv:Gr/Color/Patient2Tissue9 = 3 100 210   0
iv:Gr/Color/Patient2Tissue10= 3 100 240   0
iv:Gr/Color/Patient2Tissue11= 3 200 200   0
iv:Gr/Color/Patient2Tissue12= 3 200 200  30
iv:Gr/Color/Patient2Tissue13= 3 200 200  60
iv:Gr/Color/Patient2Tissue14= 3 200 200  90
iv:Gr/Color/Patient2Tissue15= 3 200 200 120
iv:Gr/Color/Patient2Tissue16= 3 200 200 150
iv:Gr/Color/Patient2Tissue17= 3 200 200 180
iv:Gr/Color/Patient2Tissue18= 3 200 200 210
iv:Gr/Color/Patient2Tissue19= 3 200 200 240
iv:Gr/Color/Patient2Tissue20= 3 230 200 240
iv:Gr/Color/Patient2Tissue21= 3 230 230 240
iv:Gr/Color/Patient2Tissue22= 3 230 230 240
iv:Gr/Color/Patient2Tissue23= 3 240 240 240
iv:Gr/Color/Patient2Tissue24= 3 255 255 255
iv:Gr/Color/Patient2Tissue25= 3 100 100 100
