# Read phase space in TOPAS ASCII form

b:Ge/World/Invisible = "TRUE"

s:Ge/VacFilm/Type     = "TsBox"
s:Ge/VacFilm/Parent   = "World"
s:Ge/VacFilm/Material = "G4_WATER"
d:Ge/VacFilm/HLX      = 50.0 cm
d:Ge/VacFilm/HLY      = 50.0 cm
d:Ge/VacFilm/HLZ      = 1.0 cm
d:Ge/VacFilm/TransX   = 0. cm
d:Ge/VacFilm/TransY   = 0. cm
d:Ge/VacFilm/TransZ   = 0. cm
d:Ge/VacFilm/RotX     = 0. deg
d:Ge/VacFilm/RotY     = 0. deg
d:Ge/VacFilm/RotZ     = 0. deg
s:Ge/VacFilm/Color    = "skyblue"

s:So/Example/Type                            = "PhaseSpace"
s:So/Example/PhaseSpaceFileName              = "ASCIIOutput"
s:So/Example/Component                       = "World"
#i:So/Example/PhaseSpaceMultipleUse          = 2
b:So/Example/PhaseSpaceIncludeEmptyHistories = "True"

# Graphics
s:Gr/ViewA/Type             = "OpenGL"
i:Gr/ViewA/WindowSizeX      = 900
i:Gr/ViewA/WindowSizeY      = 900
d:Gr/ViewA/Theta            = 55 deg
d:Gr/ViewA/Phi              = 20 deg
s:Gr/ViewA/Projection       = "Perspective"
d:Gr/ViewA/PerspectiveAngle = 30 deg
u:Gr/ViewA/Zoom             = 1.3
b:Gr/ViewA/HiddenLineRemovalForTrajectories = "True"

i:Ts/ShowHistoryCountAtInterval = 10
b:Ts/PauseBeforeQuit = "True"
