# Kinetic Energy filter cutoff varies by time feature

b:Ts/PauseBeforeQuit          = "True"
b:Ge/CheckForUnusedComponents = "False"

s:Ge/Box/Type     = "TsBox"
s:Ge/Box/Parent   = "World"
s:Ge/Box/Material = "G4_WATER"
d:Ge/Box/HLX      = 1. m
d:Ge/Box/HLY      = 1. m
d:Ge/Box/HLZ      = .4 m
d:Ge/Box/TransX   = 0. m
d:Ge/Box/TransY   = 0. m
d:Ge/Box/TransZ   = 0. m
d:Ge/Box/RotX     = 0. deg
d:Ge/Box/RotY     = 0. deg
d:Ge/Box/RotZ     = 0. deg

s:Sc/Box/Quantity                  = "Fluence"
s:Sc/Box/Component                 = "Box"
s:Sc/Box/IfOutputFileAlreadyExists = "Overwrite"
b:Sc/Box/OutputToConsole           = "True"

s:Sc/Boxb/Quantity                             = "Fluence"
s:Sc/Boxb/Component                            = "Box"
s:Sc/Boxb/IfOutputFileAlreadyExists            = "Overwrite"
b:Sc/Boxb/OutputToConsole                      = "True"
d:Sc/Boxb/OnlyIncludeIfIncidentParticleKEAbove = 160. MeV

s:Sc/Boxc/Quantity                             = "Fluence"
s:Sc/Boxc/Component                            = "Box"
s:Sc/Boxc/IfOutputFileAlreadyExists            = "Overwrite"
b:Sc/Boxc/OutputToConsole                      = "True"
d:Sc/Boxc/OnlyIncludeIfIncidentParticleKEAbove = Tf/Zoom/Value MeV

s:Gr/MyOGL/Type        = "OpenGL"
i:Gr/MyOGL/WindowSizeX = 600
i:Gr/MyOGL/WindowSizeY = 600
i:Gr/MyOGL/WindowPosX  = 0
i:Gr/MyOGL/WindowPosY  = 0

s:Tf/Zoom/Function           = "Linear MeV"
d:Tf/Zoom/Rate               = 1. MeV/ms
d:Tf/Zoom/StartValue         = 160.0 MeV
d:Tf/Zoom/RepetitionInterval = 360. ms

d:Tf/TimelineEnd             = 720.0 ms
i:Tf/NumberOfSequentialTimes = 720

s:So/Example/Type                     = "Beam"
s:So/Example/Component                = "BeamPosition"
s:So/Example/BeamParticle             = "proton"
d:So/Example/BeamEnergy               = 169.23 MeV
u:So/Example/BeamEnergySpread         = 0.757504
s:So/Example/BeamPositionDistribution = "Gaussian"
s:So/Example/BeamPositionCutoffShape  = "Ellipse"
d:So/Example/BeamPositionCutoffX      = 10. cm
d:So/Example/BeamPositionCutoffY      = 10. cm
d:So/Example/BeamPositionSpreadX      = 0.65 cm
d:So/Example/BeamPositionSpreadY      = 0.65 cm
s:So/Example/BeamAngularDistribution  = "Gaussian"
d:So/Example/BeamAngularCutoffX       = 90. deg
d:So/Example/BeamAngularCutoffY       = 90. deg
d:So/Example/BeamAngularSpreadX       = 0.0032 rad
d:So/Example/BeamAngularSpreadY       = 0.0032 rad
i:So/Example/NumberOfHistoriesInRun   = 1
